PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Trial_Exp
  keyboardBackend = PsychToolbox
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Routines
  Routine feedback
  Routine StartWelcome
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        That concludes the practice block.
        You can take some time to look away from the screen and relax your eyes.

        Please press Spacebar to continue with the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        eyetracking='1'
  Routine Pupil
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        block_check=0
      Begin Experiment:
        import zmq
        import msgpack as serializer

        from time import sleep, time

        # Setup zmq context and remote helper
        ctx = zmq.Context()
        pupil_remote = zmq.Socket(ctx, zmq.REQ)
        pupil_remote.connect('tcp://127.0.0.1:50020')

        pupil_remote.send_string("PUB_PORT")
        pub_port = pupil_remote.recv_string()
        pub_socket = zmq.Socket(ctx, zmq.PUB)
        pub_socket.connect("tcp://127.0.0.1:" + str(pub_port))
        def notify(notification):
            """Sends ``notification`` to Pupil Remote"""
            topic = "notify." + notification["subject"]
            payload = serializer.dumps(notification, use_bin_type=True)
            pupil_remote.send_string(topic, flags=zmq.SNDMORE)
            pupil_remote.send(payload)
            return pupil_remote.recv_string()

        def send_trigger(trigger):
            payload = serializer.dumps(trigger, use_bin_type=True)
            pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
            pub_socket.send(payload)
        def new_trigger(label, duration):
            return {
            "topic": "annotation",
            "label": label,
            "timestamp": time_fn(),
            "duration": duration,
            }
        time_fn = core.monotonicClock.getTime

        # set pupil's time to psychopy time
        pupil_remote.send_string("T " + str(time_fn()))
        print(pupil_remote.recv_string())
        sleep(2.)
        rec_count=0
      Begin Routine:
        if eyetracking == '1':
            time_fn = core.monotonicClock.getTime
            name = expInfo['participant']
            rstring ='R '+ str(name)+str(block_check)
            pupil_remote.send_string(rstring)
            print(pupil_remote.recv_string())
            sleep(0.25)
            label = "start_of_experiment"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(0.25)
            rec_count=rec_count+1
        else:
            continueRoutine = False
  Routine EndBlock
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Block Complete, You can take some time to look away from the screen and relax your eyes.
        Press spacebar to continue when ready
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine reference_tone
    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_2
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Reference_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(.25)
      End Routine:
        sound_files = stimulus_array1[cntr1]
  Routine comparison_tone
    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    SoundComponent sound_3
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "comparison_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(.25)
      End Routine:
        find_it = 0
        answers = answer_array1[cntr1]
        if(answers=='equal'):
               find_it=1
        cntr1+=1
        print(cntr1)
  Routine End_tone
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'lshift','rshift'
      correctAns = $answers
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    SoundComponent sound_4
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Answer_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        #sleep(1.)
  Routine feedback_2
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        sounds = ['Audio/right_tick.wav','Audio/wrong_buzz.wav']
      Begin Routine:
        if (key_resp.corr):
            sound = sounds[0]
        else:
            if(find_it==1):
                sound = sounds[0]
            else:
                sound = sounds[1]
        next_wait = np.random.choice(np.arange(6,11),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "feedback_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(.25)
    PolygonComponent polygon_5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $next_wait
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    SoundComponent sound_5
      sound [set every repeat] = $sound
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  Routine Ready_tone
    PolygonComponent polygon
      contrast = 0.5
      fillColor = white
      lineWidth = 0.3
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_ready
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    SoundComponent sound_1
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import numpy
      Begin Routine:
        wait_ready = np.random.choice(np.arange(2,7),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "Ready_Tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(0.25)
  Routine stop_pupil
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "End_of_Trial"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(0.25)
        pupil_remote.send_string('r')
        print(pupil_remote.recv_string())
        sleep(0.25)
  Routine NewBlock
  Routine init_code
    CodeComponent code_9
      Code Type = Py
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      Before Experiment:
        import random, xlrd
        import csv

        #randomize the seed
        random.seed()
        #stimulus file
        infile = '/Users/cmml/Documents/Pupillometry_Experiment/looptemplate3.xlsx'
      Begin Experiment:
        stim_words = ['Audio/820.0.wav','Audio/826.0.wav','Audio/832.0.wav','Audio/838.0.wav','Audio/844.0.wav','Audio/850.0.wav','Audio/856.0.wav','Audio/862.0.wav','Audio/868.0.wav','Audio/874.0.wav','Audio/880.0.wav']
        stimulus_array1 = []
        stimulus_array2 = []
        stimulus_array3 =[]
        stimulus_array4 = []
        stimulus_array5 =[]
        practice_array=['Audio/820.0.wav','Audio/874.0.wav','Audio/826.0.wav','Audio/874.0.wav']
        stim_names = [stimulus_array1,stimulus_array2,stimulus_array3,stimulus_array4,stimulus_array5]
        practice_answers=['lshift','rshift','lshift','rshift']
        answer_array1 = []
        answer_array2 = []
        answer_array3 = []
        answer_array4 = []
        answer_array5 = []
        stim_answers = [answer_array1,answer_array2,answer_array3,answer_array4,answer_array5]
        cntr1 = 0
        cntr2 =0
        cntr3 = 0
        cntr4 = 0
        cntr5 = 0
        cntr_practice=0
        for i in stim_names:
            for row in stim_words:
                i.append(row)
            random.shuffle(i)
        cntr = 0
        for i in stim_names:
            for f in i:
                if(int(f[6:9])<850):
                    stim_answers[cntr].append('lshift')
                elif(int(f[6:9])>=850):
                    stim_answers[cntr].append('rshift')
            cntr+=1
        name = expInfo['participant']
        file_name1 = '/Users/cmml/Documents/Pupillometry_Experiment/data/'+name+'stims.npy'
        file_name2 = '/Users/cmml/Documents/Pupillometry_Experiment/data/'+name+'stimAnswers.npy'
        with open(file_name1, 'wb') as f:
            np.save(f, np.array(stim_names))
        with open(file_name2, 'wb') as f:
            np.save(f, np.array(stim_answers))
  Routine code_stim
    CodeComponent code_10
      Code Type = Auto->JS
  Routine Pupil_2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == '1':
            time_fn = core.monotonicClock.getTime
            name = expInfo['participant']
            rstring ='R '
            pupil_remote.send_string(rstring)
            print(pupil_remote.recv_string())
            label = "Begin Block2"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(0.25)
        else:
            continueRoutine = False
  Routine code_stim2
    CodeComponent code_12
      Code Type = Auto->JS
  Routine Ready_tone2
  Routine reference_tone2
    PolygonComponent polygon_7
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_7
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Reference_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        sound_files = stimulus_array2[cntr2]
  Routine comparison_tone2
    PolygonComponent polygon_8
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_8
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "comparison_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        answers = answer_array2[cntr2]
        find_it = 0
        if(answers=='equal'):
               find_it=1
        cntr2+=1
        print(cntr2)
  Routine comparison_tone2_2
  Routine End_tone2
  Routine feedback2
  Routine Ready_tone2_2
    PolygonComponent polygon_6
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_ready
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        wait_ready = np.random.choice(np.arange(2,7),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "Ready_Tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_6
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine reference_tone2_2
  Routine End_tone2_2
    PolygonComponent polygon_9
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'lshift','rshift'
      correctAns = $answers
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    SoundComponent sound_9
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Answe_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
  Routine Pupil3
  Routine Pupil_3
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == '1':
            time_fn = core.monotonicClock.getTime
            name = expInfo['participant']
            rstring ='R '+ str(name)
            pupil_remote.send_string(rstring)
            print(pupil_remote.recv_string())
            label = "start_of_experiment"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(0.25)
        else:
            continueRoutine = False
  Routine Ready_tone3
    PolygonComponent polygon_10
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_ready
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        wait_ready = np.random.choice(np.arange(2,7),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "Ready_Tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_10
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine reference_tone3
    PolygonComponent polygon_11
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_11
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Reference_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        sound_files = stimulus_array3[cntr3]
  Routine comparison_tone3
    PolygonComponent polygon_12
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_12
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "comparison_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        answers = answer_array3[cntr3]
        find_it=0
        if(answers=='equal'):
               find_it=1
        cntr3+=1
        print(cntr3)
  Routine End_tone3
    PolygonComponent polygon_13
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'lshift','rshift'
      correctAns = $answers
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Answe_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_13
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Ready_Tone4
    PolygonComponent polygon_14
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_ready
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    SoundComponent sound_14
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0.80
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        wait_ready = np.random.choice(np.arange(2,7),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "Ready_Tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
  Routine Reference_tone4
    PolygonComponent polygon_15
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_15
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Reference_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        sound_files = stimulus_array4[cntr4]
  Routine comparison_tone4
    PolygonComponent polygon_16
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_16
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "comparison_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        answers = answer_array4[cntr4]
        cntr4+=1
        print(cntr4)
  Routine End_tone4
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Answe_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_17
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_17
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'lshift','rshift'
      correctAns = $answers
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine feedback_4
    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Experiment:
        sounds = ['Audio/right_tick.wav','Audio/wrong_buzz.wav']
      Begin Routine:
        if key_resp_6.corr:
            sound = sounds[0]
        else:
            sound = sounds[1]
        next_wait = np.random.choice(np.arange(6,11),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "feedback_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    PolygonComponent polygon_18
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $next_wait
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    SoundComponent sound_18
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Ready_tone5
    PolygonComponent polygon_19
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_ready
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    SoundComponent sound_19
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        wait_ready = np.random.choice(np.arange(2,7),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "Ready_Tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
  Routine reference_tone5
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  Routine comparison_tone5
    PolygonComponent polygon_21
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_21
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "comparison_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
      End Routine:
        answers = answer_array5[cntr5]
        cntr5+=1
        print(cntr5)
  Routine End_tone5
    PolygonComponent polygon_22
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "Answe_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_22
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'lshift','rshift'
      correctAns = $answers
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine feedback5
    PolygonComponent polygon_23
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $next_wait
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Experiment:
        sounds = ['Audio/right_tick.wav','Audio/wrong_buzz.wav']
      Begin Routine:
        if key_resp_7.corr:
            sound = sounds[0]
        else:
            sound = sounds[1]
        next_wait = np.random.choice(np.arange(6,11),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "feedback_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
    SoundComponent sound_23
      sound = $sound
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  Routine End_Experiment
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank You For Taking Part In This Experiment
  Routine feedback2_2
    PolygonComponent polygon_24
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $next_wait
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    SoundComponent sound_24
      sound = $sound
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    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        if (key_resp.corr):
            sound = sounds[0]
        else:
            if(find_it==1):
                sound = sounds[0]
            else:
                sound = sounds[1]
        next_wait = np.random.choice(np.arange(6,11),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "feedback_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
  Routine feedback_3
    PolygonComponent polygon_25
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $next_wait
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    SoundComponent sound_25
      sound = $sound
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        if (key_resp.corr):
            sound = sounds[0]
        else:
            if(find_it==1):
                sound = sounds[0]
            else:
                sound = sounds[1]
        next_wait = np.random.choice(np.arange(6,11),1)[0]
        time_fn = core.monotonicClock.getTime
        label = "feedback_tone"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(1.)
  Routine Consent_form
    TextComponent text_4
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Participant rights: You may refuse or discontinue your voluntary participation in this research study at any time. There is no direct benefit to you in participating in this study. However, only participants’ data who complete the full experiment will be included in the final results and dissemination.
        Contacts and Questions: For questions, concerns, or complaints about the study, you may contact the PI, Dr. Claire Arthur at: claire.arthur[at]gatech.edu, or you may directly reach out to Georgia Tech’s Office of Research Integrity by contacting irb[at]gatech.edu.
        Feel free to print or save a copy of this page.

        By providing consent, you are agreeing to participate. Please press space to provide your consent and read the full instructions to begin the practice trials.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-0.4)
      size = [0.4,0.1]
      startVal [time (s)] = 0
      text = Press Space to Consent
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Instructions
  Routine PracticeBlock
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        This is a practice block, pay attention to the tones
  Routine Ready_practice
    PolygonComponent polygon_26
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_26
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine reference_practice
    PolygonComponent polygon_27
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_27
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:
        sound_files = practice_array[cntr_practice]
  Routine comparison_practice
    PolygonComponent polygon_28
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_28
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        answers = practice_answers[cntr_practice]
  Routine End_tonepractice
    PolygonComponent polygon_29
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    SoundComponent sound_29
      sound = Audio/650.o.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'lshift','rshift'
      correctAns = $answers
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback_practice
    PolygonComponent polygon_30
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    SoundComponent sound_30
      sound [set every repeat] = Audio/right_tick.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_37
      Code Type = Auto->JS
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      Before Experiment:
        sounds2 = ['Audio/right_tick.wav','Audio/wrong_buzz.wav','Audio/right_tick.wav','Audio/wrong_buzz.wav']
        cntpracts =0
      Begin Experiment:
        \
      Begin Routine:
        sound = sounds2[cntpracts]
        if key_resp_10.corr:
            cntpracts+=1
        else:
            cntpracts+=1
      End Routine:
        cntr_practice+=1
  Routine Introduction
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Hello and Welcome!

        This study aims to replicate an oft-cited experiment from 1967 (Hahnemann & Beatty, 1967) but using modern pupillometry hardware and software.

        This study has been reviewed by the Georgia Tech Institutional Review Board (IRB), and has been identified as “Minimal risk research under 45 CFR 46. (Protocol 21153). This study contains neither any personal benefits nor any known risks to you.

        The experiment should take approximately 20-30 minutes to complete. Your participation is extremely valuable to us and we thank you for taking the time to help us.

        Please press the spacebar to read the full instructions.
    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.3)
      size = [0.7,0.2]
      startVal [time (s)] = 0
      text = PRESS SPACE
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Intro_contd
    TextComponent text_7
      letterHeight = 0.0225
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
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      text:
        This experiment requires you to wear headphones. The experimenters have carefully calibrated the volume so as to be the same for all participants. Kindly do not adjust volume.
        In this study your task is to compare the height of two tones, and respond indicating whether you
         think the second tone of the pair was higher or lower than the first. You will indicate whether you
         thought the tone was lower or higher using the left and right [SHIFT] keys. This is a purely aural task
         and there will be no visual information.
         For each trial (task) you will actually hear a total of 4 tones: first a “ready” tone which alerts you that
         the trial is beginning; then you will hear the comparison tone (which is always the same); then you
         will hear your comparison tone (the one that varies); finally, you will hear a “respond” tone at which
         point you may enter one of the [SHIFT] keys to indicate your response. Note that is it very
         important you wait for the “response” tone before entering your response. After you have
         entered your response, you will hear a “buzz” or “ding” sound to alert you to whether your response
         was incorrect or correct, respectively. An illustration of the trial design is shown below.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_31
      sound = $sounds2[0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_10
      letterHeight = 0.0225
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
         You will perform this task in a block of 11 trials, following which you will see a screen that will indicate that the block is over, and you may press the [SPACE] key whenever you are ready to
         continue to the next block. There are a total of 5 blocks (and a total of 55 trials).
         A fixation cross will appear on the screen and we ask that you maintain your gaze on the cross for
         the duration of the experiment as much as possible. In between blocks you will see a message that it is a good time to take a break for your eyes if you need to. You do not have to worry about blinking.
        Press space to continue!
    ImageComponent image
      image = /Users/cmml/Downloads/LaTeX_DL_468198_240419/TrialDiagram2.png
      pos = (0, -0.075)
      size = (0.5, 0.125)
      startVal [time (s)] = 0.0
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  Routine hello
    TextComponent text_8
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Confidentiality: The data from this experiment will be collected anonymously. Collected data will be shared with collaborators at the Georgia Institute of Technology. Data obtained will only be connected to your anonymous participant number, and will be securely stored on a password-protected and encrypted computer for a minimum of 5 years. Your identity is not recorded, nor are you identifiable from the data we record. Neither your identity nor agreement to participate will be disclosed in any publication resulting from this research.
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  Routine Instructions_2
  Routine Welcome_practice
    TextComponent text_9
      letterHeight = 0.0005
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome to the Pupillometry Experiment, thank you for taking your time to help us out today.

        Press Spacebar to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_34
      Code Type = Py
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      Begin Experiment:
        eyetracking='1'
  Routine calibrate
    PolygonComponent polygon_31
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        block_check = block_check+1
        print(block_check)
  Routine Ready_4
  Routine Pupil_4
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == '1':
            time_fn = core.monotonicClock.getTime
            name = expInfo['participant']
            rstring ='R '
            pupil_remote.send_string(rstring)
            print(pupil_remote.recv_string())
            label = "Begin Block2"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(0.25)
        else:
            continueRoutine = False
  Routine Pupil_5
    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Routine:
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  Routine intro
Flow
  Routine init_code
  Routine Introduction
  Routine hello
  Routine Consent_form
  Routine Intro_contd
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine Ready_practice
    Routine reference_practice
    Routine comparison_practice
    Routine End_tonepractice
    Routine feedback_practice
  LoopTerminator trials_6
  Routine StartWelcome
  Routine calibrate
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 11
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    Routine Pupil
    Routine Ready_tone
    Routine reference_tone
    Routine comparison_tone
    Routine End_tone
    Routine feedback_2
    Routine stop_pupil
  LoopTerminator trials
  Routine EndBlock
  Routine calibrate
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 11
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    Routine Pupil
    Routine Ready_tone2_2
    Routine reference_tone2
    Routine comparison_tone2
    Routine End_tone2_2
    Routine feedback2_2
    Routine stop_pupil
  LoopTerminator trials_2
  Routine EndBlock
  Routine calibrate
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 11
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    Routine Pupil
    Routine Ready_tone3
    Routine reference_tone3
    Routine comparison_tone3
    Routine End_tone3
    Routine feedback_3
    Routine stop_pupil
  LoopTerminator trials_3
  Routine EndBlock
  Routine calibrate
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 11
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    Routine Pupil
    Routine Ready_Tone4
    Routine Reference_tone4
    Routine comparison_tone4
    Routine End_tone4
    Routine feedback_4
    Routine stop_pupil
  LoopTerminator trials_4
  Routine EndBlock
  Routine calibrate
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = sequential
    nReps = 11
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    Routine Pupil
    Routine Ready_tone5
    Routine reference_tone5
    Routine comparison_tone5
    Routine End_tone5
    Routine feedback5
    Routine stop_pupil
  LoopTerminator trials_5
  Routine End_Experiment
