PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = PupilTest
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Recording Test
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    CodeComponent code
      Code Type = Auto->JS
  Routine init
    CodeComponent
      Code Type = Auto->JS
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      Begin Experiment:
        import zmq
        import msgpack as serializer

        from time import sleep, time

        # Setup zmq context and remote helper
        ctx = zmq.Context()
        pupil_remote = zmq.Socket(ctx, zmq.REQ)
        pupil_remote.connect('tcp://127.0.0.1:50020')

        pupil_remote.send_string("PUB_PORT")
        pub_port = pupil_remote.recv_string()
        pub_socket = zmq.Socket(ctx, zmq.PUB)
        pub_socket.connect("tcp://127.0.0.1:" + str(pub_port))
        def notify(notification):
            """Sends ``notification`` to Pupil Remote"""
            topic = "notify." + notification["subject"]
            payload = serializer.dumps(notification, use_bin_type=True)
            pupil_remote.send_string(topic, flags=zmq.SNDMORE)
            pupil_remote.send(payload)
            return pupil_remote.recv_string()

        def send_trigger(trigger):
            payload = serializer.dumps(trigger, use_bin_type=True)
            pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
            pub_socket.send(payload)
        def new_trigger(label, duration):
            return {
            "topic": "annotation",
            "label": label,
            "timestamp": time_fn(),
            "duration": duration,
            }
        time_fn = core.monotonicClock.getTime

        # set pupil's time to psychopy time
        pupil_remote.send_string("T " + str(time_fn()))
        print(pupil_remote.recv_string())
        sleep(2.)
      Begin Routine:
        time_fn = core.monotonicClock.getTime
        name = expInfo['participant']
        rstring ='R '+ str(name)
        pupil_remote.send_string(rstring)
        print(pupil_remote.recv_string())
        sleep(0.25)
        label = "start_of_experiment"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(0.25)
  Routine stoprecording
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        time_fn = core.monotonicClock.getTime
        label = "End_of_Block"
        duration = 0.
        minimal_trigger = new_trigger(label, duration)
        send_trigger(minimal_trigger)
        sleep(2.)
        pupil_remote.send_string('r')
        print(pupil_remote.recv_string())
Flow
  Routine init
  Routine trial
  Routine stoprecording
